PsychoPy2experiment version="2020.1.3"
Settings
  Experiment info = {'participant':'', 'session':'001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = (1024, 768)
  expName = tTraceTest1
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Routines
  Routine trial
    MouseComponent trialMouse
      forceEndRoutineOnPress = never
      newClicksOnly = False
      saveMouseState = every frame
      startVal [time (s)] = 0.0
      syncScreenRefresh = True
      timeRelativeTo = routine
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    PolygonComponent trialTarget
      fillColor = $[1,1,1]
      nVertices = 180
      pos [set every frame] = (pos1, pos2)
      shape = regular polygon...
      size = (0.025, 0.025)
      startVal [time (s)] = 0.0
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    PolygonComponent trialCursor
      fillColor = $[1,1,1]
      nVertices = 180
      pos [set every frame] = (trialMouse.getPos()[0], trialMouse.getPos()[1])
      shape = regular polygon...
      size = (0.025, 0.025)
      startVal [time (s)] = 0.0
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    CodeComponent trialCode
      Code Type = Auto->JS
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      Begin Routine:
        trialCursor.pos = (1.5,1.5)
        trialMouse.pos = (1.5,1.5)
      Each Frame:
        CursorTargetDistance = sqrt((trialCursor.pos[0]-trialTarget.pos[0])**2 + (trialCursor.pos[1]-trialTarget.pos[1])**2)

        if (CursorTargetDistance < .025):
                print('Target get'+' ('+str(globalClock.getTime())+')')
                continueRoutine = False
Flow
  LoopInitiator trialsLoop loopType="TrialHandler"
    conditionsFile = tTraceCond1.xlsx
    loopType = sequential
    nReps = 1
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    conditions:
      [OrderedDict([('pos1', 0.3), ('pos2', 0.01)]),
      OrderedDict([('pos1', 0.18), ('pos2', 0.28)]),
      OrderedDict([('pos1', 0.28), ('pos2', 0.13)]),
      OrderedDict([('pos1', 0.4), ('pos2', 0.36)]),
      OrderedDict([('pos1', 0.31), ('pos2', 0.38)]),
      OrderedDict([('pos1', 0.01), ('pos2', 0.34)]),
      OrderedDict([('pos1', 0.17), ('pos2', 0.24)]),
      OrderedDict([('pos1', 0.05), ('pos2', 0.16)]),
      OrderedDict([('pos1', 0.02), ('pos2', 0.18)]),
      OrderedDict([('pos1', 0.12), ('pos2', 0.29)]),
      OrderedDict([('pos1', 0.37), ('pos2', 0.35)]),
      OrderedDict([('pos1', 0.15), ('pos2', 0.02)]),
      OrderedDict([('pos1', 0.11), ('pos2', 0.12)]),
      OrderedDict([('pos1', 0.04), ('pos2', 0.04)]),
      OrderedDict([('pos1', 0.19), ('pos2', 0.22)]),
      OrderedDict([('pos1', 0.26), ('pos2', 0.09)]),
      OrderedDict([('pos1', 0.09), ('pos2', 0.07)]),
      OrderedDict([('pos1', 0.06), ('pos2', 0.32)]),
      OrderedDict([('pos1', 0.25), ('pos2', 0.2)]),
      OrderedDict([('pos1', 0.34), ('pos2', 0.21)]),
      OrderedDict([('pos1', 0.14), ('pos2', 0.39)]),
      OrderedDict([('pos1', 0.21), ('pos2', 0.03)]),
      OrderedDict([('pos1', 0.03), ('pos2', 0.31)]),
      OrderedDict([('pos1', 0.13), ('pos2', 0.25)]),
      OrderedDict([('pos1', 0.38), ('pos2', 0.27)]),
      OrderedDict([('pos1', 0.2), ('pos2', 0.37)]),
      OrderedDict([('pos1', 0.36), ('pos2', 0.15)]),
      OrderedDict([('pos1', 0.1), ('pos2', 0.26)]),
      OrderedDict([('pos1', 0.23), ('pos2', 0.11)]),
      OrderedDict([('pos1', 0.29), ('pos2', 0.19)]),
      OrderedDict([('pos1', 0.32), ('pos2', 0.08)]),
      OrderedDict([('pos1', 0.39), ('pos2', 0.17)]),
      OrderedDict([('pos1', 0.22), ('pos2', 0.14)])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
    Routine trial
  LoopTerminator trialsLoop
